PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = Final project
  keyboardBackend = Pyglet
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Routines
  Routine trial
    PolygonComponent fixation
      fillColor = -1.0000, -1.0000, 0.0000
      shape = cross
      size = (10, 10)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent image
      color = -1.0000, -1.0000, -1.0000
      image [set every repeat] = $Image
      size = (0.4, 0.4)
      startVal [time (s)] = 1.0
      stopVal [time (s)] = 1.5
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    TextComponent text_3
      color [set every repeat] = $colour
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [time (s)] = 1.5
      text [set every repeat] = $emotion
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    KeyboardComponent key_resp_2
      allowedKeys = 'g','r','n'
      correctAns = $correct_res
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      storeCorrect = True
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  Routine welcome
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        You will be shown images of happy, sad and neutral face. Each denoted with a colour: green, red and neutral each representing an emotion.

        Press 'g' for happy, 'r' for sad and 'n' neutral. If you have a sad face (r) with colour text in 'green'; kinldy refer that face and press the emotion colour i.e 'r' and so on.

        Press SPACEBAR whenever you are ready :)
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 2.0
      text = Thank You!
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Flow
  Routine welcome
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = /Users/shachee/Downloads/Lab in Psycohology- final project data.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'Image': '/Users/shachee/Desktop/PsychoPy Lab/happy2.jpeg', 'colour': 'green', 'stim_condition': 'C', 'correct_res': 'g', 'emotion': 'happy'},
      {'Image': '/Users/shachee/Desktop/PsychoPy Lab/sad1.jpeg', 'colour': 'red', 'stim_condition': 'C', 'correct_res': 'r', 'emotion': 'sad'},
      {'Image': '/Users/shachee/Desktop/PsychoPy Lab/neutral1.png', 'colour': 'gray', 'stim_condition': 'C', 'correct_res': 'n', 'emotion': 'neutral'},
      {'Image': '/Users/shachee/Desktop/PsychoPy Lab/neutral1.png', 'colour': 'green', 'stim_condition': 'I', 'correct_res': 'n', 'emotion': 'happy'},
      {'Image': '/Users/shachee/Desktop/PsychoPy Lab/sad1.jpeg', 'colour': 'green', 'stim_condition': 'I', 'correct_res': 'r', 'emotion': 'happy'},
      {'Image': '/Users/shachee/Desktop/PsychoPy Lab/happy2.jpeg', 'colour': 'red', 'stim_condition': 'I', 'correct_res': 'g', 'emotion': 'sad'},
      {'Image': '/Users/shachee/Desktop/PsychoPy Lab/neutral1.png', 'colour': 'red', 'stim_condition': 'I', 'correct_res': 'n', 'emotion': 'sad'},
      {'Image': '/Users/shachee/Desktop/PsychoPy Lab/happy2.jpeg', 'colour': 'gray', 'stim_condition': 'I', 'correct_res': 'g', 'emotion': 'neutral'},
      {'Image': '/Users/shachee/Desktop/PsychoPy Lab/sad1.jpeg', 'colour': 'gray', 'stim_condition': 'I', 'correct_res': 'r', 'emotion': 'neutral'}]
    Routine trial
  LoopTerminator trials
  Routine end
